PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'list': '01a'}
  Full-screen window = True
  Monitor = laptopDiogo
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [3008, 1692]
  expName = masked_priming_english_new_implementation
  keyboardBackend = PsychToolbox
  logging level = debug
  runMode = 0
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Routines
  Routine three_field_masked_priming
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    TextComponent mask
      durationEstim = 0.5
      font = Courier
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [frame N] = 30
      text = ######
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    TextComponent prime
      durationEstim = 0.05
      font = Courier
      letterHeight = 0.05
      startEstim = 0.5
      startVal [frame N] = 30
      stopVal [frame N] = 3
      text [set every repeat] = $PRIME
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    TextComponent target
      durationEstim = 0.3
      font = Courier
      letterHeight = 0.05
      startEstim = 0.55
      startVal [frame N] = 33
      stopVal [duration (frames)] = 18
      text [set every repeat] = $TARGET
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    KeyboardComponent lex_dec
      allowedKeys = 'f','j'
      correctAns = $COR_ANS
      durationEstim = 3
      forceEndRoutine = True
      startEstim = 0.55
      startVal [frame N] = 33
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine ITI
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    TextComponent inter_trial_int
      durationEstim = 0.9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()*(1.5-0.9)+0.9
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  Routine StartExp
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    TextComponent start_experiment
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any questions? Please let us know now.

        Otherwise, let the experimenter know you are ready to start.
    KeyboardComponent get_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndExp
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    TextComponent end_exp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment is over!

        Thank you for your participation.

        Please remain still and wait until the experimenter come help you out of the room.

        [Press the space bar to exit this screen]
    KeyboardComponent end_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be reading strings of letters on the screen.

        Sometimes they will spell a word in English, like FOREST.

        Sometimes they will not, like BLICKET.

        Your task is to judge, for each string, whether it spells a word in English.

        If you think the string spells a word, press F.

        If you think it does not spell a word, press J.
    KeyboardComponent start_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartPractice
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    TextComponent start_practice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now ready to start the practice.

        Remember, your task is to judge whether each string you read spells a word of English.

        Press F, if you think it is a word.

        Press J, if you think it is not a word.

        Let the experimenter know when you are ready to start the practice.
    KeyboardComponent get_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine is_break
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    TextComponent take_break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please take a quick break now.

        Remember, your task is to judge, for each string you read, whether it spells a word of English.

        Press F if it does, and J if it does not.

        You can continue by pressing the space bar.
    KeyboardComponent finish_break
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if experiment.thisN == 0 or experiment.thisN % 20 != 0:
            continueRoutine = False
Flow
  Routine Instructions
  Routine StartPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = Practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('PRIME', 'cat'), ('TARGET', 'CAT'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'WORD'), ('COR_ANS', 'f')]),
      OrderedDict([('PRIME', 'road'), ('TARGET', 'ROAD'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'WORD'), ('COR_ANS', 'f')]),
      OrderedDict([('PRIME', 'apple'), ('TARGET', 'APPLE'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'WORD'), ('COR_ANS', 'f')]),
      OrderedDict([('PRIME', 'ginger'), ('TARGET', 'BLOOM'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'WORD'), ('COR_ANS', 'f')]),
      OrderedDict([('PRIME', 'limp'), ('TARGET', 'ROBE'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'WORD'), ('COR_ANS', 'f')]),
      OrderedDict([('PRIME', 'finger'), ('TARGET', 'CANCEL'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'WORD'), ('COR_ANS', 'f')]),
      OrderedDict([('PRIME', 'blicket'), ('TARGET', 'BLICKET'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'PSEUDOWORD'), ('COR_ANS', 'j')]),
      OrderedDict([('PRIME', 'porf'), ('TARGET', 'PORF'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'PSEUDOWORD'), ('COR_ANS', 'j')]),
      OrderedDict([('PRIME', 'lirod'), ('TARGET', 'LIROD'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'PSEUDOWORD'), ('COR_ANS', 'j')]),
      OrderedDict([('PRIME', 'blamp'), ('TARGET', 'SERPLE'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'PSEUDOWORD'), ('COR_ANS', 'j')]),
      OrderedDict([('PRIME', 'clorb'), ('TARGET', 'FLARP'), ('CONDITION', 'PRACTICE'), ('LEXICALITY', 'PSEUDOWORD'), ('COR_ANS', 'j')])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
    Routine ITI
    Routine three_field_masked_priming
  LoopTerminator practice
  Routine StartExp
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = $"LIST" + expInfo['list'] + ".csv"
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('PRIME', 'appendix'), ('TARGET', 'BISTRO'), ('RELATIONSHIP', 'UNREL'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'bistro')]),
      OrderedDict([('PRIME', 'beetum'), ('TARGET', 'BEET'), ('RELATIONSHIP', 'ND_PW'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'beet')]),
      OrderedDict([('PRIME', 'scuffed'), ('TARGET', 'SCUFF'), ('RELATIONSHIP', 'D_W'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'scuff')]),
      OrderedDict([('PRIME', 'mully'), ('TARGET', 'MULL'), ('RELATIONSHIP', 'D_PW'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'mull')]),
      OrderedDict([('PRIME', 'musket'), ('TARGET', 'MUSK'), ('RELATIONSHIP', 'ND_W'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'musk')]),
      OrderedDict([('PRIME', 'inferno'), ('TARGET', 'ALOOF'), ('RELATIONSHIP', 'UNREL'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'aloof')]),
      OrderedDict([('PRIME', 'baskel'), ('TARGET', 'BASK'), ('RELATIONSHIP', 'D_W'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'bask')]),
      OrderedDict([('PRIME', 'toiled'), ('TARGET', 'TOIL'), ('RELATIONSHIP', 'D_PW'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'toil')]),
      OrderedDict([('PRIME', 'briskic'), ('TARGET', 'BRISK'), ('RELATIONSHIP', 'ND_W'), ('LEXICALITY', 'W'), ('COR_ANS', 'f'), ('target_lowercase', 'brisk')])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
    Routine is_break
    Routine ITI
    Routine three_field_masked_priming
  LoopTerminator experiment
  Routine EndExp
